PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1504, 1003]
  expName = ExperimentA
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Welcome
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    CodeComponent startup_code
      Code Type = Py
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      Before Experiment:
        ####################################################
        #                     BRAINPRODUCTS
        ####################################################
        from psychopy.hardware import brainproducts
        # Import serial library
        import serial
        import time
        import math
        import random

        # Define serial port communication
        try:
            port = serial.Serial('COM3')
        except:
            print("!!!!!! ----- CANNOT FIND PORT ----- !!!!!!\n")


        # Define function to send triggers and clean pins
        def send_triggers(trigger, pulse_length=0.005):
            try:
                port.write(trigger)
                time.sleep(pulse_length)
                port.write([0])
            except:
                print("!!!!!! ----- TRIGGER " + str(trigger) + " DID NOT SEND ----- !!!!!!\n")

        # Define triggers to use
        triggs = {
            "start_experiment": [10],
            "stop_experiment": [20],
            "s_HE": [40], # HIGHent
            "s_LES": [60], # LOWentLOWsup
            "s_HSI": [80], # LOWentHIGHsupIN
            "s_HSC": [100], #LOWentHIGHsupCON
            "s_HEB": [120], # HIGHentB
            "s_LESB": [140], # LOWentLOWsupB
            "s_HSIB": [160], # LOWentHIGHsupINB
            "s_HSCB": [180], #LOWentHIGHsupCONB
            "s_reg": [200], #regression
            "s_regB": [220], #regressionB
            }
      Begin Experiment:
        FRAME_RATE = 60
        globalClock = core.Clock()
        win.callOnFlip(send_triggers, triggs["start_experiment"],thisExp.addData('expstart',globalClock.getTime()))
    TextComponent text
      letterHeight = 2.0
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Welcome to the Experiment.

        Press SPACE to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 2.0
      startVal [time (s)] = 0.0
      wrapWidth = 50
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      text:
        PART ONE:  Instructions

        Please read the sentences on the screen one word at a time.
        Try to keep your eyes on the middle of the screen when reading.  In between sentences look at the cross. BLINK on the signal if necessary.
        At the end there will be some TRUE/FALSE questions about the sentences.
        Use the question time to take a rest, look around, blink etc.

        When you are ready to practice press SPACE
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine goodbye
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    TextComponent text_3
      letterHeight = 2.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = 30
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      text:
        The Experiment has finished.

        Thank You for Participating!
    CodeComponent code_7
      Code Type = Auto->JS
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      End Experiment:
        win.callOnFlip(send_triggers, triggs["stop_experiment"])
  Routine fix_cross_practice
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    PolygonComponent fixation_cross
      fillColor = white
      lineWidth = 0.1
      shape = cross
      size = (1.8, 1.8)
      startVal [frame N] = 40
      stopVal [duration (frames)] = 200
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        sentence_list = sentence_A.split()


        # Work out how many loops to do of the trials loop
        sentence_length = len(sentence_list)
    TextComponent text_11
      letterHeight = 2.2
      pos = (0,3)
      startVal [frame N] = 80
      stopVal [duration (frames)] = 130
      wrapWidth = 30
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      text [set every repeat]:
                                                              BLINK
  Routine trial_practice
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    TextComponent text_4
      letterHeight = 2.2
      startVal [frame N] = 27
      stopVal [duration (frames)] = 22
      text [set every repeat] = $sentence_list[trials_practice.thisN]
      wrapWidth = 30
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        practice_loop.addData("word", sentence_list[trials_practice.thisN])
  Routine ready_screen
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    TextComponent text_6
      letterHeight = 2.0
      startVal [time (s)] = 0.0
      wrapWidth = 50
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      text:
        Practice Finished.

        If you have any questions, please ask now.

        Press SPACE when you are ready to begin the Experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pred_instructions
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  Routine Instructions_two
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    TextComponent text_8
      letterHeight = 2.2
      startVal [time (s)] = 1
      wrapWidth = 50
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      text:
        PART TWO:  Instructions

        While reading each sentence, try to PREDICT the final word/s.

        For Example:   He was eating.........a sandwhich.

        At the end you will be asked to recall approximately what percentage of your predictions were correct.


        When you are ready press SPACE
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine trial_comp
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    TextComponent text_5
      letterHeight = 2.2
      startVal [frame N] = 51
      stopVal [duration (frames)] = 33
      text [set every repeat] = $sentence_list[trials_comp.thisN]
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # This will add columns containing the words information to the saved csv
        comp_loop.addData("word", sentence_list[trials_comp.thisN])
    CodeComponent trigger_code
      Code Type = Py
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      Begin Routine:
        pulse_start = False
        trigger_value = (triggs[trigger_name][0]+(sentence_length-trials_comp.thisN))
      Each Frame:
        if not pulse_start and text_5.status == STARTED:
            pulse_start = True
            win.callOnFlip(send_triggers, [trigger_value],thisExp.addData('TrigTime',globalClock.getTime()))
  Routine fix_cross_comp
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    CodeComponent cross_random
      Code Type = Auto->JS
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      Before Experiment:
        cross_rand1 = [190,200,210,220,230,240,250,260]
      Begin Routine:
        cross_rand = random.choice(cross_rand1)
    PolygonComponent fixation_cross_2
      fillColor = white
      lineWidth = 0.5
      shape = cross
      size = (1.8,1.8)
      startVal [frame N] = 60
      stopVal [duration (frames)] = $cross_rand
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Take the trials data (sentence and word type)
        # Split this into lists to be used later
        sentence_list = sentence.split()


        # Work out how many loops to do of the trials loop
        sentence_length = len(sentence_list)
    CodeComponent sentence_triggers
      Code Type = Auto->JS
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      Begin Routine:
        pulse_start = False
      Each Frame:
        if condition == "HIGHent":
            trigger_name = "s_HE"
        elif condition == "LOWentLOWsup":
            trigger_name = "s_LES"
        elif condition == "LOWentHIGHsupIN":
            trigger_name = "s_HSI"
        elif condition == "LOWentHIGHsupCON":
            trigger_name = "s_HSC"
        elif condition == "regression":
            trigger_name = "s_reg"
        if not pulse_start and fixation_cross_2.status == STARTED:
            pulse_start = True
            win.callOnFlip(send_triggers, triggs[trigger_name])
    TextComponent text_14
      letterHeight = 2.2
      pos = (0, 1)
      startVal [frame N] = 130
      stopVal [duration (frames)] = 120
      wrapWidth = 30
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      text [set every repeat]:
                                                                  BLINK
  Routine trial_pred
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    TextComponent text_7
      letterHeight = 2.2
      startVal [frame N] = 51
      stopVal [duration (frames)] = 33
      text [set every repeat] = $sentence_list[trials_pred.thisN]
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # This will add columns containing the words information to the saved csv
        pred_loop.addData("word", sentence_list[trials_pred.thisN])
    CodeComponent trigger_codeP
      Code Type = Py
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      Begin Routine:
        pulse_start = False
        trigger_value = (triggs[trigger_name][0]+(sentence_length-trials_pred.thisN))
      Each Frame:
        if not pulse_start and text_7.status == STARTED:
            pulse_start = True
            win.callOnFlip(send_triggers, [trigger_value])
  Routine fix_cros_pred
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    CodeComponent cross_random2
      Code Type = Auto->JS
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      Before Experiment:
        cross_rand1a = [190,200,210,220,230,240,250,260]
      Begin Routine:
        cross_randa = random.choice(cross_rand1a)
    PolygonComponent fixation_cross_3
      fillColor = white
      lineWidth = 0.5
      shape = cross
      size = (1.8,1.8)
      startVal [frame N] = 60
      stopVal [duration (frames)] = $cross_randa
      units = deg
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # Take the trials data (sentence and word type)
        # Split this into lists to be used later
        sentence_list = sentence_P.split()

        # Work out how many loops to do of the trials loop
        sentence_length = len(sentence_list)
    CodeComponent sentence_triggersP
      Code Type = Auto->JS
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      Begin Routine:
        pulse_start = False
      Each Frame:
        if condition_P == "HIGHentB":
            trigger_name = "s_HEB"
        elif condition_P == "LOWentLOWsupB":
            trigger_name = "s_LESB"
        elif condition_P == "LOWentHIGHsupINB":
            trigger_name = "s_HSIB"
        elif condition_P == "LOWentHIGHsupCONB":
            trigger_name = "s_HSCB"
        elif condition_P == "regressionB":
            trigger_name = "s_regB"
        if not pulse_start and fixation_cross_3.status == STARTED:
            pulse_start = True
            win.callOnFlip(send_triggers, triggs[trigger_name])
    TextComponent text_15
      letterHeight = 2.2
      pos = (0, 1)
      startVal [frame N] = 130
      stopVal [duration (frames)] = 120
      wrapWidth = 30
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      text [set every repeat]:
                                                                  BLINK
  Routine prac_comp_questions
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    TextComponent text_9
      letterHeight = 2.0
      startVal [time (s)] = 1
      wrapWidth = 50
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      text:
        True or False:

        They forgot to pay for their meals.


        Press T for true or press F for false
    KeyboardComponent key_resp_5
      allowedKeys = 't','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine comp_questions_intro
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    TextComponent text_10
      letterHeight = 2.0
      startVal [time (s)] = 1
      wrapWidth = 50
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      text:
        True or False Questions:

        Press T if the sentence is true.

        Press F if the sentence is false.


        Press SPACE when you are ready to answer the questions
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pred_question
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    TextComponent text_12
      letterHeight = 2.2
      startVal [time (s)] = 2
      wrapWidth = 50
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      text:
        Question:
        Approximately what percentage of your predictions were correct?
        PRESS:
        0 for 0%
        1 for 10%
        2 for 20%
        3 for 30%
        4 for 40%
        5 for 50%
        6 for 60%
        7 for 70%
        8 for 80%
        9 for 90%
    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine part_one_end
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    TextComponent text_13
      letterHeight = 2.0
      startVal [time (s)] = 0.5
      wrapWidth = 50
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      text:
        That is the end of Part 1.

        Press SPACE when you are ready to begin Part 2.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine comp_questions1
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    TextComponent text_111
      letterHeight = 2.0
      startVal [time (s)] = 0.5
      text [set every repeat] = $question1
      wrapWidth = 50
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    KeyboardComponent key_resp_7
      allowedKeys = 't','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine comp_questions
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    TextComponent text_112
      letterHeight = 2.0
      startVal [time (s)] = 0.5
      text [set every repeat] = $question
      wrapWidth = 50
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    KeyboardComponent key_resp_10
      allowedKeys = 't','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice_comp.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('id_A', 1), ('sentence_A', 'At the zoo he saw a tiger.')]),
      OrderedDict([('id_A', 2), ('sentence_A', 'They paid for their meals but forgot to leave a tip.')]),
      OrderedDict([('id_A', 3), ('sentence_A', 'He went to get a coat')])]
    Routine fix_cross_practice
    LoopInitiator trials_practice loopType="TrialHandler"
      loopType = random
      nReps = sentence_length
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      Routine trial_practice
    LoopTerminator trials_practice
  LoopTerminator practice_loop
  Routine prac_comp_questions
  Routine ready_screen
  LoopInitiator comp_loop loopType="TrialHandler"
    conditionsFile = comprehension1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ID', 1), ('condition', 'HIGHent'), ('sentence', 'We used to live near a beast.')]),
      OrderedDict([('ID', 2), ('condition', 'HIGHent'), ('sentence', 'Most teachers have an elephant.')]),
      OrderedDict([('ID', 3), ('condition', 'HIGHent'), ('sentence', 'Several different people were holding a trombone.')]),
      OrderedDict([('ID', 4), ('condition', 'HIGHent'), ('sentence', 'I know someone who worked as an astronomer.')]),
      OrderedDict([('ID', 5), ('condition', 'HIGHent'), ('sentence', 'We should make a rainforest.')]),
      OrderedDict([('ID', 6), ('condition', 'HIGHent'), ('sentence', 'You should think about an oblong.')]),
      OrderedDict([('ID', 7), ('condition', 'HIGHent'), ('sentence', 'He forgot he had a mermaid.')]),
      OrderedDict([('ID', 8), ('condition', 'HIGHent'), ('sentence', "They've just seen an elevator.")]),
      OrderedDict([('ID', 9), ('condition', 'HIGHent'), ('sentence', "Tomorrow I'll make a galaxy.")]),
      OrderedDict([('ID', 10), ('condition', 'HIGHent'), ('sentence', 'On Friday he will visit a wizard.')]),
      OrderedDict([('ID', 11), ('condition', 'HIGHent'), ('sentence', 'Mum would like an encasement.')]),
      OrderedDict([('ID', 12), ('condition', 'HIGHent'), ('sentence', 'They were given a machine.')]),
      OrderedDict([('ID', 13), ('condition', 'HIGHent'), ('sentence', "She's going to be a zoologist.")]),
      OrderedDict([('ID', 14), ('condition', 'HIGHent'), ('sentence', 'The correct answer is an impeachment.')])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
    Routine fix_cross_comp
    LoopInitiator trials_comp loopType="TrialHandler"
      loopType = random
      nReps = sentence_length
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      Routine trial_comp
    LoopTerminator trials_comp
  LoopTerminator comp_loop
  Routine comp_questions_intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = comp_questions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('qnum', 1), ('question', 'Mum would like a cat.')]),
      OrderedDict([('qnum', 2), ('question', 'I used to be a prophet.')]),
      OrderedDict([('qnum', 3), ('question', 'He hit the nail with an octopus.')]),
      OrderedDict([('qnum', 4), ('question', 'On Friday he will visit a farmer.')]),
      OrderedDict([('qnum', 5), ('question', 'Sally ecercises by riding a horse.')]),
      OrderedDict([('qnum', 6), ('question', 'The postman was bitten by a dog.')]),
      OrderedDict([('qnum', 7), ('question', 'The baby played with an accordian.')]),
      OrderedDict([('qnum', 8), ('question', 'I have three uncles and no aunts.')]),
      OrderedDict([('qnum', 9), ('question', 'Sandcastles were built on a beach.')]),
      OrderedDict([('qnum', 10), ('question', 'At the bank she opened an umbrella.')])]
    Routine comp_questions
  LoopTerminator trials
  Routine part_one_end
  LoopInitiator pred_loop loopType="TrialHandler"
    conditionsFile = prediction1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ID_P', 1), ('condition_P', 'HIGHentB'), ('sentence_P', 'While waiting she saw a sock.')]),
      OrderedDict([('ID_P', 2), ('condition_P', 'HIGHentB'), ('sentence_P', 'Most of all I want an aardvark.')]),
      OrderedDict([('ID_P', 3), ('condition_P', 'HIGHentB'), ('sentence_P', 'She told me we needed an eclipse.')]),
      OrderedDict([('ID_P', 4), ('condition_P', 'HIGHentB'), ('sentence_P', 'They were talking about a moonwalk.')]),
      OrderedDict([('ID_P', 5), ('condition_P', 'HIGHentB'), ('sentence_P', 'I’ve never seen such an ogre.')]),
      OrderedDict([('ID_P', 6), ('condition_P', 'HIGHentB'), ('sentence_P', 'I wasn’t expecting a pirate.')]),
      OrderedDict([('ID_P', 7), ('condition_P', 'HIGHentB'), ('sentence_P', 'We had a great time at a pharmacy.')]),
      OrderedDict([('ID_P', 8), ('condition_P', 'HIGHentB'), ('sentence_P', 'She might have had a jellybean.')]),
      OrderedDict([('ID_P', 9), ('condition_P', 'HIGHentB'), ('sentence_P', 'We can’t believe it’s not a penguin.')]),
      OrderedDict([('ID_P', 10), ('condition_P', 'HIGHentB'), ('sentence_P', 'He was surprised to find a salmon.')]),
      OrderedDict([('ID_P', 11), ('condition_P', 'HIGHentB'), ('sentence_P', 'A few days ago they gave me a whipping.')]),
      OrderedDict([('ID_P', 12), ('condition_P', 'HIGHentB'), ('sentence_P', 'You should put it on a goat.')]),
      OrderedDict([('ID_P', 13), ('condition_P', 'HIGHentB'), ('sentence_P', 'Mary decided to make a disco.')])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
    Routine fix_cros_pred
    LoopInitiator trials_pred loopType="TrialHandler"
      loopType = random
      nReps = sentence_length
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      Routine trial_pred
    LoopTerminator trials_pred
  LoopTerminator pred_loop
  Routine comp_questions_intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = comp_questions_2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('qnum1', 1), ('question1', "I wasn't expecting a pirate.")]),
      OrderedDict([('qnum1', 2), ('question1', 'We had a great time a supermarket.')]),
      OrderedDict([('qnum1', 3), ('question1', 'He was surprised to find a salmon.')]),
      OrderedDict([('qnum1', 4), ('question1', 'His head was cold so he put on a scarf.')]),
      OrderedDict([('qnum1', 5), ('question1', 'He caught the fish with a net.')]),
      OrderedDict([('qnum1', 6), ('question1', 'The artist sketched the portrait with a crayon.')]),
      OrderedDict([('qnum1', 7), ('question1', 'She baked the cake in a submarine.')]),
      OrderedDict([('qnum1', 8), ('question1', "Bob's as blind as a mole.")]),
      OrderedDict([('qnum1', 9), ('question1', 'The teacher helped a student.')]),
      OrderedDict([('qnum1', 10), ('question1', 'The baby drank milk from a sheep.')])]
    Routine comp_questions1
  LoopTerminator trials_2
  Routine goodbye
